PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1280, 800]
  color = $[1,1,1]
  expName = MLExpLu
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Routines
  Routine trial
  Routine instr
    CodeComponent setup
      Code Type = Auto->JS
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      Begin Experiment:
        import numpy as np
        import random

        full_conditions = ["eqleftout", "eqleftout", "eqleftout", "eqleftout", "eqleftout", "eqleftout", "eqleftout", "eqleftout",
        "eqrightout", "eqrightout", "eqrightout", "eqrightout", "eqrightout", "eqrightout", "eqrightout", "eqrightout", "uneqleftlongout", "uneqrightlongout", "uneqleftlongin", "uneqrightlongin"]

        practice_conditions = ["eqleftout", "eqrightout", "uneqleftlongout", "uneqrightlongout", "uneqleftlongin", "uneqrightlongin"]

        random.shuffle(practice_conditions)

        full_conditions = np.repeat(full_conditions, 4)
        random.shuffle(full_conditions)

        condition_values = {
            'eqleftout': {
                'change': 0,
                'leftout': 1
            },
            'eqrightout': {
                'change': 0,
                'leftout': -1
            },
            'uneqleftlongout': {
                'change': 0.1,
                'leftout': 1
            },
            'uneqrightlongout': {
                'change': -0.1,
                'leftout': -1
            },
            'uneqleftlongin': {
                'change': 0.1,
                'leftout': -1
            },
            'uneqrightlongin': {
                'change': -0.1,
                'leftout': 1
            }
        }

        horizDist = 100

        adaptsecs = 2

        targetsecs = 0.5

        FramestoWait = 2

        BufferSeconds = 0.1

        LineLength = [round(np.random.normal(loc = 400, scale = abs(400*0.05)))]

        for i in range(80-1):
            LineLength.append(round(np.random.normal(loc = 400, scale = abs(400*0.05))))
  Routine adapt
    CodeComponent pertrial
      Code Type = Auto->JS
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      Begin Routine:
        import math

        cur_cond = full_conditions[mainLoop.thisRepN]

        cur_length = LineLength[mainLoop.thisRepN]

        cur_change = condition_values[cur_cond]['change']

        cur_leftlength = cur_length * (1 + cur_change)

        cur_rightlength = cur_length

        cur_leftout = condition_values[cur_cond]['leftout']

        degrees = cur_leftout * 45

        arrowhyp = int(round((cur_length/4)*(math.sqrt(2))))

        arrow_y = int(round(cur_length/8))

        arrow_x = int(round(cur_length/8)) * (-1) * cur_leftout

        leftpos_x = -(cur_leftlength/2) - horizDist
        rightpos_x = (cur_rightlength/2) + horizDist

        leftendleft = -cur_leftlength - horizDist
        rightendleft = -horizDist
        leftendright = horizDist
        rightendright = cur_rightlength + horizDist
    PolygonComponent LeftLine
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 10
      pos [set every repeat] = (leftpos_x, 0)
      shape = line
      size [set every repeat] = (cur_leftlength, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = adaptsecs
      units = pix
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    PolygonComponent RightLine
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 10
      pos [set every repeat] = (rightpos_x, 0)
      shape = line
      size [set every repeat] = (cur_rightlength, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = adaptsecs
      units = pix
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    PolygonComponent LTL
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 10
      ori [set every repeat] = 0 + degrees
      pos [set every repeat] = (leftendleft+arrow_x, arrow_y)
      shape = line
      size [set every repeat] = (arrowhyp, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = adaptsecs
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    PolygonComponent LBL
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 10
      ori [set every repeat] = 0 - degrees
      pos [set every repeat] = (leftendleft+arrow_x, -arrow_y)
      shape = line
      size [set every repeat] = (arrowhyp, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = adaptsecs
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    PolygonComponent LTR
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 10
      ori [set every repeat] = 0 - degrees
      pos [set every repeat] = (rightendleft-arrow_x, arrow_y)
      shape = line
      size [set every repeat] = (arrowhyp, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = adaptsecs
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    PolygonComponent LBR
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 10
      ori [set every repeat] = 0 + degrees
      pos [set every repeat] = (rightendleft-arrow_x, -arrow_y)
      shape = line
      size [set every repeat] = (arrowhyp, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = adaptsecs
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    PolygonComponent RTL
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 10
      ori [set every repeat] = 0 - degrees
      pos [set every repeat] = (leftendright-arrow_x, arrow_y)
      shape = line
      size [set every repeat] = (arrowhyp, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = adaptsecs
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    PolygonComponent RBL
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 10
      ori [set every repeat] = 0 + degrees
      pos [set every repeat] = (leftendright-arrow_x, -arrow_y)
      shape = line
      size [set every repeat] = (arrowhyp, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = adaptsecs
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Flow
  Routine instr
  LoopInitiator mainLoop loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine adapt
  LoopTerminator mainLoop
  Routine trial
